---
API: 3
OpenSesame: 4.0.24
Platform: posix
---
set width 1920
set uniform_coordinates yes
set title Custom
set subject_parity even
set subject_nr 0
set start experiment
set sound_sample_size -16
set sound_freq 48000
set sound_channels 2
set sound_buf_size 1024
set sampler_backend legacy
set round_decimals 2
set mouse_backend legacy
set keyboard_backend legacy
set height 1080
set fullscreen no
set form_clicks no
set foreground black
set font_underline no
set font_size 30
set font_italic False
set font_family Arial
set font_bold False
set experiment_path "/Users/m-lukas/Documents/TU Berlin/Dateien/Masterarbeit/Questionnaires/Custom"
set disable_garbage_collection False
set description "The main experiment item"
set coordinates uniform
set compensation 0
set color_backend legacy
set clock_backend legacy
set canvas_backend legacy
set bidi no
set background "#ffffff"

define sketchpad Done
	set duration 1995
	set description "Displays stimuli"
	draw textline center=1 color=black font_bold=yes font_family=Arial font_italic=no font_size=30 html=yes show_if=always text="Thanks for participating! Please tell the instructor that you're done." x=0 y=0 z_index=0

define loop Fluency_Questions
	set source_file ""
	set source table
	set repeat 1
	set order random
	set description "Repeatedly runs another item"
	set cycles 3
	set continuous no
	set break_if_on_first yes
	set break_if False
	setcycle 0 Text "The handover process felt smooth and uninterrupted."
	setcycle 0 Item 1
	setcycle 1 Text "The robot’s movements complemented mine during the task."
	setcycle 1 Item 2
	setcycle 2 Text "There was a good rhythm between me and the robot during handovers."
	setcycle 2 Item 3
	run Fluency_Sequence

define inline_script Fluency_Rating
	set description "Executes Python code"
	___run__
	while True:
	    form._exec()
	
	    if var.Rating_response != "None":
	        break
	__end__
	___prepare__
	#create and show rating form
	from libopensesame import widgets
	form = widgets.form(exp,cols=[1,3,1], rows=[1,1,1,1,1], margins=(100,100,100,100), spacing=25)
	
	label = widgets.label(form, text="[Text] \n\n")
	label_left = widgets.label(form, text='Strongly disagree')
	label_right = widgets.label(form, text='Strongly agree')
	rating_scale = widgets.rating_scale(form, nodes=['--', '-', 'neither', '+', '++'], click_accepts=False,var='Rating_response')
	nextButton = widgets.button(form, text='Continue')
	form.set_widget(label, (1,0),colspan=1)
	form.set_widget(rating_scale, (1,1),colspan=1)
	form.set_widget(label_left, (0,1))
	form.set_widget(label_right, (2,1))
	form.set_widget(nextButton, (1,2),colspan=1)
	__end__

define sequence Fluency_Sequence
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run Fluency_Rating always
	run logger always

define loop Gaze_Questions
	set source_file ""
	set source table
	set repeat 1
	set order random
	set description "Repeatedly runs another item"
	set cycles 3
	set continuous no
	set break_if_on_first yes
	set break_if False
	setcycle 0 Text "The robot’s gaze felt natural."
	setcycle 0 Item 4
	setcycle 1 Text "The way the robot looked at me resembled human gaze behavior."
	setcycle 1 Item 5
	setcycle 2 Text "The gaze behavior helped me understand what the robot was doing."
	setcycle 2 Item 6
	run Gaze_sequence

define inline_script Gaze_Rating
	set description "Executes Python code"
	___run__
	while True:
	    form._exec()
	
	    if var.Rating_response != "None":
	        break
	__end__
	___prepare__
	#create and show rating form
	from libopensesame import widgets
	form = widgets.form(exp,cols=[1,3,1], rows=[1,1,1,1,1], margins=(100,100,100,100), spacing=25)
	
	label = widgets.label(form, text="[Text] \n\n")
	label_left = widgets.label(form, text='Strongly disagree')
	label_right = widgets.label(form, text='Strongly agree')
	rating_scale = widgets.rating_scale(form, nodes=['--', '-', 'neither', '+', '++'], click_accepts=False,var='Rating_response')
	nextButton = widgets.button(form, text='Continue')
	form.set_widget(label, (1,0),colspan=1)
	form.set_widget(rating_scale, (1,1),colspan=1)
	form.set_widget(label_left, (0,1))
	form.set_widget(label_right, (2,1))
	form.set_widget(nextButton, (1,2),colspan=1)
	__end__

define sequence Gaze_sequence
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run Gaze_Rating always
	run gaze_logger always

define sketchpad Instructions
	set duration keypress
	set description "Displays stimuli"
	draw textline center=1 color=black font_bold=yes font_family=Arial font_italic=no font_size=30 html=yes show_if=always text="The following questionnaire has 2x3 statements.<br /><br />Using the scale provided, evaluate how much you agree each statement <br /><br />(1) = Strongly disagree<br />(5) = Strongly agree<br /><br /><br />Remember that there are no correct or incorrect responses. <br />Try to reply as soon as possible with your initial impression and <br />avoid thinking too long about the response.<br /><br /><br />PRESS THE SPACE BAR TO CONTINUE<br />" x=0 y=32 z_index=0

define sequence experiment
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run Instructions always
	run Fluency_Questions always
	run Gaze_Questions True
	run Done always

define logger gaze_logger
	set description "Logs experimental data"
	set auto_log yes

define logger logger
	set description "Logs experimental data"
	set auto_log yes

define inline_script new_1_inline_script
	set description "Executes Python code"
	___run__
	while True:
	    form._exec()
	
	    if var.Rating_response != "None":
	        break
	__end__
	___prepare__
	#create and show rating form
	from libopensesame import widgets
	form = widgets.form(exp,cols=[1,3,1], rows=[1,1,1,1,1], margins=(100,100,100,100), spacing=25)
	
	label = widgets.label(form, text="The robot acts...\n\n [Text] \n\n")
	label_left = widgets.label(form, text='Strongly disagree')
	label_right = widgets.label(form, text='Strongly agree')
	rating_scale = widgets.rating_scale(form, nodes=['--', '-', 'neither', '+', '++'], click_accepts=False,var='Rating_response')
	nextButton = widgets.button(form, text='Continue')
	form.set_widget(label, (1,0),colspan=1)
	form.set_widget(rating_scale, (1,1),colspan=1)
	form.set_widget(label_left, (0,1))
	form.set_widget(label_right, (2,1))
	form.set_widget(nextButton, (1,2),colspan=1)
	__end__

define logger new_1_logger
	set description "Logs experimental data"
	set auto_log yes

define sequence new_1_sequence
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run new_1_inline_script always
	run new_1_logger always

