---
API: 3
OpenSesame: 4.0.24
Platform: posix
---
set width 1920
set title Demographics
set subject_parity even
set subject_nr 0
set start experiment
set sound_sample_size -16
set sound_freq 48000
set sound_channels 2
set sound_buf_size 1024
set sampler_backend legacy
set round_decimals 2
set mouse_backend legacy
set keyboard_backend legacy
set height 1080
set fullscreen no
set form_clicks no
set foreground black
set font_underline no
set font_size 30
set font_italic False
set font_family sans
set font_bold True
set experiment_path "/Users/m-lukas/Documents/TU Berlin/Dateien/Masterarbeit/Questionnaires/Demographics"
set disable_garbage_collection False
set description "A simple template for form-based questionnaires"
set color_backend legacy
set clock_backend legacy
set canvas_backend legacy
set background "#ffffff"

define notepad about_this_template
	__note__
	This template already contains the basic structure of a typical questionnaire,
	consisting of open and multiple-choice questions.
	For more information, please visit:
	- <http://osdoc.cogsci.nl/>
	Have fun with OpenSesame!
	__end__
	set description "Some pointers to help you get started!"

define form_text_input age
	set timeout infinite
	set spacing 10
	set rows "1;1;6"
	set only_render no
	set margins "50;50;50;50"
	set form_var age
	set form_title "1/6"
	__form_question__
	{question_text_age}
	__end__
	set description "A simple text input form"
	set cols 1
	set _theme gray
	widget 0 0 1 1 label text="{form_title}"
	widget 0 1 1 1 label center=no text="{form_question}"
	widget 0 2 1 1 text_input focus=yes return_accepts=yes stub="" var="{form_var}"


define form_multiple_choice data_usage
	set timeout infinite
	set spacing 10
	__question__
	{question_text_data}
	__end__
	__options__
	{o_data_1}
	{o_data_2}
	__end__
	set margins "50;50;50;50"
	set form_var data_usage
	set form_title "6/6"
	set description "A simple multiple choice item"
	set button_text Ok
	set allow_multiple no
	set advance_immediately yes
	set _theme gray

define form_multiple_choice education
	set timeout infinite
	set spacing 10
	__question__
	{question_text_education}
	__end__
	__options__
	{o_edu_1}
	{o_edu_2}
	{o_edu_3}
	{o_edu_4}
	{o_edu_5}
	{o_edu_6}
	{o_edu_7}
	{o_edu_8}
	__end__
	set margins "50;50;50;50"
	set form_var education
	set form_title "4/6"
	set description "A simple multiple choice item"
	set button_text Ok
	set allow_multiple no
	set advance_immediately yes
	set _theme gray

define form_multiple_choice experience
	set timeout infinite
	set spacing 10
	__question__
	{question_text_experience}
	__end__
	__options__
	{o_exp_1}
	{o_exp_2}
	{o_exp_3}
	__end__
	set margins "50;50;50;50"
	set form_var experience
	set form_title "5/6"
	set description "A simple multiple choice item"
	set button_text Ok
	set allow_multiple no
	set advance_immediately yes
	set _theme gray

define sequence experiment
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run question_loop True
	run goodbye True

define form_multiple_choice gender
	set timeout infinite
	set spacing 10
	__question__
	{question_text_gender}
	__end__
	__options__
	{o_gender_1}
	{o_gender_2}
	{o_gender_3}
	{o_gender_4}
	__end__
	set margins "50;50;50;50"
	set form_var gender
	set form_title "2/6"
	set description "A simple multiple choice item"
	set button_text Ok
	set allow_multiple no
	set advance_immediately yes
	set _theme gray

define form_text_display goodbye
	set timeout infinite
	set spacing 10
	set rows "1;4;1"
	set only_render no
	set ok_text Quit
	set margins "50;50;50;50"
	set form_title Finished
	set form_text "Thank you for your participation!"
	set description "A simple text display form"
	set cols "1;1;1"
	set _theme gray
	widget 0 0 3 1 label text="{form_title}"
	widget 0 1 3 1 label center=no text="{form_text}"
	widget 1 2 1 1 button text="{ok_text}"


define form_text_display instructions
	set timeout infinite
	set spacing 10
	set rows "1;4;1"
	set only_render no
	set ok_text Start
	set margins "50;50;50;50"
	set form_title "<b>Instructions</b>"
	__form_text__
	Click "start" to begin this questionnaire.
	__end__
	set description "A simple text display form"
	set cols "1;1;1"
	set _theme gray
	widget 0 0 3 1 label text="{form_title}"
	widget 0 1 3 1 label center=no text="{form_text}"
	widget 1 2 1 1 button text="{ok_text}"


define logger logger
	set use_quotes yes
	set ignore_missing yes
	set description "Logs experimental data"
	set auto_log no
	log age
	log gender
	log vision
	log education
	log experience
	log data_usage
	exclude "*_backend"
	exclude PERSISTENT
	exclude TEMPORARY
	exclude acc
	exclude accuracy
	exclude average_response_time
	exclude avg_rt
	exclude background
	exclude closed
	exclude "count_*"
	exclude credentialless
	exclude crossOriginIsolated
	exclude datetime
	exclude description
	exclude devicePixelRatio
	exclude disable_garbage_collection
	exclude experiment_file
	exclude experiment_path
	exclude "font_*"
	exclude foreground
	exclude form_clicks
	exclude fullscreen
	exclude height
	exclude innerHeight
	exclude innerWidth
	exclude isSecureContext
	exclude length
	exclude logfile
	exclude opensesame_codename
	exclude origin
	exclude originAgentCluster
	exclude outerHeight
	exclude outerWidth
	exclude "page?Offset"
	exclude round_decimals
	exclude "screen*"
	exclude "scroll?"
	exclude "sound_*"
	exclude start
	exclude status
	exclude "time_*"
	exclude total_correct
	exclude total_response_time
	exclude total_responses
	exclude width

define form_multiple_choice new_form_multiple_choice
	set timeout infinite
	set spacing 10
	set question "Your question"
	__options__
	Yes
	No
	Maybe
	__end__
	set margins "50;50;50;50"
	set form_var response
	set form_title "Form title"
	set description "A simple multiple choice item"
	set button_text Ok
	set allow_multiple yes
	set advance_immediately yes
	set _theme gray

define form_text_input new_form_text_input
	set timeout infinite
	set spacing 10
	set rows "1;1;6"
	set only_render no
	set margins "50;50;50;50"
	set form_var response
	set form_title Title
	set form_question "Your question"
	set description "A simple text input form"
	set cols 1
	set _theme gray
	widget 0 0 1 1 label text="{form_title}"
	widget 0 1 1 1 label center=no text="{form_question}"
	widget 0 2 1 1 text_input focus=yes return_accepts=yes stub="" var="{form_var}"


define loop new_loop
	set source_file ""
	set source table
	set repeat 1
	set order random
	set description "Repeatedly runs another item"
	set cycles 1
	set continuous no
	set break_if_on_first yes
	set break_if never
	setcycle 0 empty_column ""
	run ""

define loop question_loop
	set source_file "questions.csv.xlsx"
	set source file
	set skip 0
	set repeat 1
	set order sequential
	set offset no
	set item question_sequence
	set description "Repeatedly runs another item"
	set cycles 6
	set continuous no
	set column_order "question_type;question_text;question_option1;question_option2;question_option3"
	set break_if_on_first yes
	set break_if False
	setcycle 0 question_option1 ""
	setcycle 0 question_option2 ""
	setcycle 0 question_option3 ""
	setcycle 0 question_text "What is your age?"
	setcycle 0 question_type age
	setcycle 0 question_option4 ""
	setcycle 0 question_option5 ""
	setcycle 0 question_option6 ""
	setcycle 0 question_option7 ""
	setcycle 0 question_option8 ""
	setcycle 1 question_option1 female
	setcycle 1 question_option2 male
	setcycle 1 question_option3 divers
	setcycle 1 question_text "Which gender do you identify with?"
	setcycle 1 question_type gender
	setcycle 1 question_option4 "do not want to tell"
	setcycle 1 question_option5 ""
	setcycle 1 question_option6 ""
	setcycle 1 question_option7 ""
	setcycle 1 question_option8 ""
	setcycle 2 question_option1 no
	setcycle 2 question_option2 "yes, contact lenses but not now"
	setcycle 2 question_option3 "yes, contact lenses right now"
	setcycle 2 question_text "Do you use vision aids?"
	setcycle 2 question_type vison
	setcycle 2 question_option4 "yes, glasses but not now"
	setcycle 2 question_option5 ""
	setcycle 2 question_option6 ""
	setcycle 2 question_option7 ""
	setcycle 2 question_option8 ""
	setcycle 3 question_option1 "no schooling"
	setcycle 3 question_option2 "primary school"
	setcycle 3 question_option3 "ten-grade school / high school"
	setcycle 3 question_text "What is your highest degree?"
	setcycle 3 question_type education
	setcycle 3 question_option4 "Fachhochschule/University entrance qualification"
	setcycle 3 question_option5 Apprenticeship
	setcycle 3 question_option6 Bachelor
	setcycle 3 question_option7 Master
	setcycle 3 question_option8 "Doctor's degree"
	setcycle 4 question_option1 no
	setcycle 4 question_option2 "yes, with simple robots (toys, vacuum cleaner ...)"
	setcycle 4 question_option3 "yes, actively collaborating"
	setcycle 4 question_text "Did you have previous experience with robots?"
	setcycle 4 question_type experience
	setcycle 4 question_option4 ""
	setcycle 4 question_option5 ""
	setcycle 4 question_option6 ""
	setcycle 4 question_option7 ""
	setcycle 4 question_option8 ""
	setcycle 5 question_option1 yes
	setcycle 5 question_option2 no
	setcycle 5 question_option3 ""
	setcycle 5 question_text "Do you consent to the use of your anonymized data?"
	setcycle 5 question_type data_usage
	setcycle 5 question_option4 ""
	setcycle 5 question_option5 ""
	setcycle 5 question_option6 ""
	setcycle 5 question_option7 ""
	setcycle 5 question_option8 ""
	run question_sequence

define sequence question_sequence
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run age True
	run gender True
	run vision True
	run education True
	run experience True
	run data_usage True
	run logger True

define form_multiple_choice vision
	set timeout infinite
	set spacing 10
	__question__
	{question_text_vision}
	__end__
	__options__
	{o_vision_1}
	{o_vision_2}
	{o_vision_3}
	{o_vision_4}
	__end__
	set margins "50;50;50;50"
	set form_var vision
	set form_title "3/6"
	set description "A simple multiple choice item"
	set button_text Ok
	set allow_multiple no
	set advance_immediately yes
	set _theme gray

