---
API: 3
OpenSesame: 4.0.24
Platform: posix
---
set width 1920
set uniform_coordinates yes
set title GAToRS
set subject_parity even
set subject_nr 0
set start experiment
set sound_sample_size -16
set sound_freq 48000
set sound_channels 2
set sound_buf_size 1024
set sampler_backend legacy
set round_decimals 2
set mouse_backend legacy
set keyboard_backend legacy
set height 1080
set fullscreen no
set form_clicks no
set foreground black
set font_underline no
set font_size 30
set font_italic False
set font_family Arial
set font_bold True
set experiment_path "/Users/m-lukas/Documents/TU Berlin/Dateien/Masterarbeit/Questionnaires/GAToRS"
set disable_garbage_collection False
set description "The main experiment item"
set coordinates uniform
set compensation 0
set color_backend legacy
set clock_backend legacy
set canvas_backend legacy
set bidi no
set background "#ffffff"

define sketchpad Done
	set duration 1995
	set description "Displays stimuli"
	draw textline center=1 color=black font_bold=yes font_family=Arial font_italic=no font_size=30 html=yes show_if=always text="Thanks for participating! Please tell the instructor that you're done." x=0 y=0 z_index=0

define loop GAToRS
	set source_file ""
	set source table
	set repeat 1
	set order random
	set description "Repeatedly runs another item"
	set cycles 20
	set continuous no
	set break_if_on_first yes
	set break_if False
	setcycle 0 Text "I can trust persons and organizations related to development of robots "
	setcycle 0 Item 1
	setcycle 0 List GAToRS
	setcycle 1 Text "Persons and organizations related to development of robots will consider the needs, thoughts and feelings of their users "
	setcycle 1 Item 2
	setcycle 1 List GAToRS
	setcycle 2 Text "I can trust a robot "
	setcycle 2 Item 3
	setcycle 2 List GAToRS
	setcycle 3 Text "I would feel relaxed talking with a robot "
	setcycle 3 Item 4
	setcycle 3 List GAToRS
	setcycle 4 Text "If robots had emotions, I would be able to befriend them "
	setcycle 4 Item 5
	setcycle 4 List GAToRS
	setcycle 5 Text "I would feel uneasy if I was given a job where I had to use robots "
	setcycle 5 Item 6
	setcycle 5 List GAToRS
	setcycle 6 Text "I fear that a robot would not understand my commands "
	setcycle 6 Item 7
	setcycle 6 List GAToRS
	setcycle 7 Text "Robots scare me "
	setcycle 7 Item 8
	setcycle 7 List GAToRS
	setcycle 8 Text "I would feel very nervous just being around a robot"
	setcycle 8 Item 9
	setcycle 8 List GAToRS
	setcycle 9 Text "I don’t want a robot to touch me"
	setcycle 9 Item 10
	setcycle 9 List GAToRS
	setcycle 10 Text "Robots are necessary because they can do jobs that are too hard or too dangerous for people "
	setcycle 10 Item 11
	setcycle 10 List GAToRS
	setcycle 11 Text "Robots can make life easier "
	setcycle 11 Item 12
	setcycle 11 List GAToRS
	setcycle 12 Text "Assigning routine tasks to robots lets people do more meaningful tasks "
	setcycle 12 Item 13
	setcycle 12 List GAToRS
	setcycle 13 Text "Dangerous tasks should primarily be given to robots "
	setcycle 13 Item 14
	setcycle 13 List GAToRS
	setcycle 14 Text "Robots are a good thing for society, because they help people "
	setcycle 14 Item 15
	setcycle 14 List GAToRS
	setcycle 15 Text "Robots may make us even lazier "
	setcycle 15 Item 16
	setcycle 15 List GAToRS
	setcycle 16 Text "Widespread use of robots is going to take away jobs from people "
	setcycle 16 Item 17
	setcycle 16 List GAToRS
	setcycle 17 Text "I am afraid that robots will encourage less interaction between humans "
	setcycle 17 Item 18
	setcycle 17 List GAToRS
	setcycle 18 Text "Robotics is one of the areas of technology that needs to be closely monitored "
	setcycle 18 Item 19
	setcycle 18 List GAToRS
	setcycle 19 Text "Unregulated use of robotics can lead to societal upheavals"
	setcycle 19 Item 20
	setcycle 19 List GAToRS
	run GAToRS_Sequence

define inline_script GAToRS_Rating
	set description "Executes Python code"
	___run__
	while True:
	    form._exec()
	
	    if var.Rating_response != "None":
	        break
	__end__
	___prepare__
	#create and show rating form
	from libopensesame import widgets
	form = widgets.form(exp,cols=[1,3,1], rows=[1,1,1,1,1], margins=(100,100,100,100), spacing=25)
	
	label = widgets.label(form, text="[Text]")
	label_left = widgets.label(form, text='Strongly disagree')
	label_right = widgets.label(form, text='Strongly agree')
	rating_scale = widgets.rating_scale(form, nodes=['--', '-', 'neither', '+', '++'], click_accepts=False,var='Rating_response')
	nextButton = widgets.button(form, text='Continue')
	form.set_widget(label, (1,0),colspan=1)
	form.set_widget(rating_scale, (1,1),colspan=1)
	form.set_widget(label_left, (0,1))
	form.set_widget(label_right, (2,1))
	form.set_widget(nextButton, (1,2),colspan=1)
	__end__

define sequence GAToRS_Sequence
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run GAToRS_Rating always
	run logger always

define sketchpad GAToRS_instr
	set duration keypress
	set description "Displays stimuli"
	draw textline center=1 color=black font_bold=yes font_family=Arial font_italic=no font_size=30 html=yes show_if=always text="The following questionnaire has 20 statements.<br /><br />Using the scale provided, evaluate how much you agree each statement <br /><br />(1) = Strongly disagree <br />(5) = Strongly agree <br /><br /><br />Remember that there are no correct or incorrect responses. <br />Try to reply as soon as possible with your initial impression and <br />avoid thinking too long about the response.<br /><br /><br />PRESS THE SPACE BAR TO CONTINUE<br />" x=0 y=32 z_index=0

define sequence experiment
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run GAToRS_instr always
	run GAToRS always
	run Done always

define logger logger
	set description "Logs experimental data"
	set auto_log yes

