---
API: 3
OpenSesame: 4.0.24
Platform: posix
---
set width 1920
set uniform_coordinates yes
set title TPS_HRI
set subject_parity even
set subject_nr 0
set start experiment
set sound_sample_size -16
set sound_freq 48000
set sound_channels 2
set sound_buf_size 1024
set sampler_backend legacy
set round_decimals 2
set mouse_backend legacy
set keyboard_backend legacy
set height 1080
set fullscreen no
set form_clicks no
set foreground black
set font_underline no
set font_size 30
set font_italic False
set font_family Arial
set font_bold False
set experiment_path "/Users/m-lukas/Documents/TU Berlin/Dateien/Masterarbeit/Questionnaires/TPS"
set disable_garbage_collection False
set description "The main experiment item"
set coordinates uniform
set compensation 0
set color_backend legacy
set clock_backend legacy
set canvas_backend legacy
set bidi no
set background "#ffffff"

define sketchpad End
	set duration 1995
	set description "Displays stimuli"
	draw textline center=1 color=black font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if=always text=End x=0 y=0 z_index=0
	draw arrow arrow_body_length=0.8 arrow_body_width=0.5 arrow_head_width=30 color=black fill=0 penwidth=1 show_if=True x1=0 x2=96 y1=0 y2=32 z_index=0

define loop TPS_A
	set source table
	set repeat 1
	set order sequential
	set description "Repeatedly runs another item"
	set cycles 15
	set continuous no
	set break_if_on_first yes
	set break_if False
	setcycle 0 Text "Considered part of the team"
	setcycle 0 Item 1
	setcycle 0 List TPS
	setcycle 1 Text Responsible
	setcycle 1 Item 2
	setcycle 1 List TPS
	setcycle 2 Text Supportive
	setcycle 2 Item 3
	setcycle 2 List TPS
	setcycle 3 Text Incompetent
	setcycle 3 Item 4
	setcycle 3 List TPS_a
	setcycle 4 Text Dependable
	setcycle 4 Item 5
	setcycle 4 List TPS_b
	setcycle 5 Text Friendly
	setcycle 5 Item 6
	setcycle 5 List TPS
	setcycle 6 Text Reliable
	setcycle 6 Item 7
	setcycle 6 List TPS_b
	setcycle 7 Text Pleasant
	setcycle 7 Item 8
	setcycle 7 List TPS
	setcycle 8 Text Unresponsive
	setcycle 8 Item 9
	setcycle 8 List TPS_ab
	setcycle 9 Text Autonomous
	setcycle 9 Item 10
	setcycle 9 List TPS
	setcycle 10 Text Predictable
	setcycle 10 Item 11
	setcycle 10 List TPS_b
	setcycle 11 Text Conscious
	setcycle 11 Item 12
	setcycle 11 List TPS
	setcycle 12 Text Lifelike
	setcycle 12 Item 13
	setcycle 12 List TPS
	setcycle 13 Text "A good teammate"
	setcycle 13 Item 14
	setcycle 13 List TPS
	setcycle 14 Text "Led astray by unexpected changes in the environment"
	setcycle 14 Item 15
	setcycle 14 List TPS
	run TPS_A_Sequence

define inline_script TPS_A_Rating
	set description "Executes Python code"
	___run__
	while True:
	    form._exec()
	
	    if var.Rating_response != "None":
	        break
	__end__
	___prepare__
	#create and show rating form
	from libopensesame import widgets
	
	# Margins are defined as "top;right;bottom;left". Each value corresponds to a margin in pixels.
	form = widgets.form(exp,cols=[1,6,1], rows=[1,1,1,1], margins=(100,50,100,50), spacing=20)
	
	label = widgets.label(form, text="What percentage of the time this robot be...\n\n [Text] \n\n")
	rating_scale = widgets.rating_scale(form, nodes=['0%','10%', '20%', '30%', '40%', '50%', '60%', '70%', '80%', '90%', '100%'], click_accepts=False,var='Rating_response')
	nextButton = widgets.button(form, text='Continue')
	form.set_widget(label, (1,0),colspan=1)
	form.set_widget(rating_scale, (1,1),colspan=1)
	form.set_widget(nextButton, (1,2),colspan=1)
	__end__

define sequence TPS_A_Sequence
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run TPS_A_Rating always
	run logger always

define loop TPS_B
	set source table
	set repeat 1
	set order random
	set description "Repeatedly runs another item"
	set cycles 25
	set continuous no
	set break_if_on_first yes
	set break_if False
	setcycle 0 Text "Act consistently"
	setcycle 0 Item 26
	setcycle 0 List TPS_b
	setcycle 1 Text "Protect people"
	setcycle 1 Item 27
	setcycle 1 List TPS
	setcycle 2 Text "Act as part of the team"
	setcycle 2 Item 28
	setcycle 2 List TPS
	setcycle 3 Text "Function successfully"
	setcycle 3 Item 29
	setcycle 3 List TPS
	setcycle 4 Text Malfunction
	setcycle 4 Item 30
	setcycle 4 List TPS_a
	setcycle 5 Text "Clearly communicate"
	setcycle 5 Item 31
	setcycle 5 List TPS
	setcycle 6 Text "Require frequent maintenance"
	setcycle 6 Item 32
	setcycle 6 List TPS_a
	setcycle 7 Text "Openly communicate"
	setcycle 7 Item 33
	setcycle 7 List TPS
	setcycle 8 Text "Have errors"
	setcycle 8 Item 34
	setcycle 8 List TPS_a
	setcycle 9 Text "Perform a task better than a novice human user"
	setcycle 9 Item 35
	setcycle 9 List TPS
	setcycle 10 Text "Know the difference between friend and foe"
	setcycle 10 Item 36
	setcycle 10 List TPS
	setcycle 11 Text "Provide feedback"
	setcycle 11 Item 37
	setcycle 11 List TPS_b
	setcycle 12 Text "Possess adequate decision-making capability"
	setcycle 12 Item 38
	setcycle 12 List TPS
	setcycle 13 Text "Warn people of potential risks in the environment"
	setcycle 13 Item 39
	setcycle 13 List TPS
	setcycle 14 Text "Meet the needs of the mission/task"
	setcycle 14 Item 40
	setcycle 14 List TPS_b
	setcycle 15 Text "Provide appropriate information"
	setcycle 15 Item 16
	setcycle 15 List TPS_b
	setcycle 16 Text "Communicate with people"
	setcycle 16 Item 17
	setcycle 16 List TPS_b
	setcycle 17 Text "Work best with a team"
	setcycle 17 Item 18
	setcycle 17 List TPS
	setcycle 18 Text "Keep classified information secure "
	setcycle 18 Item 19
	setcycle 18 List TPS
	setcycle 19 Text "Perform exactly as instructed "
	setcycle 19 Item 20
	setcycle 19 List TPS_b
	setcycle 20 Text "Make sensible decisions"
	setcycle 20 Item 21
	setcycle 20 List TPS
	setcycle 21 Text "Work in close proximity with people "
	setcycle 21 Item 22
	setcycle 21 List TPS
	setcycle 22 Text "Tell the truth"
	setcycle 22 Item 23
	setcycle 22 List TPS
	setcycle 23 Text "Perform many functions at one time"
	setcycle 23 Item 24
	setcycle 23 List TPS
	setcycle 24 Text "Follow directions"
	setcycle 24 Item 25
	setcycle 24 List TPS_b
	run new_sequence

define inline_script TPS_B_inline_script
	set description "Executes Python code"
	___run__
	form._exec()
	__end__
	___prepare__
	#create and show rating form
	from libopensesame import widgets
	
	# Margins are defined as "top;right;bottom;left". Each value corresponds to a margin in pixels.
	form = widgets.form(exp,cols=[1,6,1], rows=[1,1,1,1], margins=(100,50,100,50), spacing=20)
	
	label = widgets.label(form, text="What percentage of the time this robot...\n\n [Text] \n\n")
	#label_left = widgets.label(form, text='')
	#label_right = widgets.label(form, text='')
	rating_scale = widgets.rating_scale(form, nodes=['0%','10%', '20%', '30%', '40%', '50%', '60%', '70%', '80%', '90%', '100%'], click_accepts=False,var='Rating_response')
	nextButton = widgets.button(form, text='Continue')
	form.set_widget(label, (1,0),colspan=1)
	form.set_widget(rating_scale, (1,1),colspan=1)
	#form.set_widget(label_left, (0,1))
	#form.set_widget(label_right, (2,1))
	form.set_widget(nextButton, (1,2),colspan=1)
	__end__

define logger TPS_B_logger
	set description "Logs experimental data"
	set auto_log yes

define sequence TPS_B_sequence
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run TPS_B_inline_script always
	run TPS_B_logger always

define sketchpad TPS_instr
	set duration keypress
	set description "Displays stimuli"
	draw textline center=1 color=black font_bold=yes font_family=Arial font_italic=no font_size=30 html=yes show_if=always text="The following questionnaire has 8 statements.<br /><br />Using the scale provided, evaluate how you evaluate the robotic interaction<br />from 0% to 100%.<br /><br />Remember that there are no correct or incorrect responses. <br />Try to reply as soon as possible with your initial impression and <br />avoid thinking too long about the response.<br /><br /><br />PRESS THE SPACE BAR TO CONTINUE<br />" x=0 y=0 z_index=0

define sketchpad Thanks
	set duration keypress
	set description "Displays stimuli"
	draw textline center=1 color=black font_bold=yes font_family=Arial font_italic=no font_size=30 html=yes show_if=True text="Thanks for participating! Please tell the instructor that you're done." x=0 y=0 z_index=0

define sequence experiment
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run TPS_instr always
	run TPS_A always
	run TPS_B True
	run Thanks True

define logger logger
	set description "Logs experimental data"
	set auto_log yes

define logger new_logger
	set description "Logs experimental data"
	set auto_log yes

define sequence new_sequence
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run TPS_A_Rating True
	run new_logger True

